PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = CRM_Spat
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Selectionner la réponse
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    ButtonComponent R1
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent R2
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent R3
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent R4
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent R5
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 5
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    ButtonComponent R6
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.225, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 6
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    ButtonComponent R7
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 7
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    ButtonComponent R8
      bold = True
      color = black
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 8
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    ButtonComponent B1
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent B2
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent B3
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent B4
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent B5
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 5
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    ButtonComponent B6
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 6
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    ButtonComponent B7
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 7
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    ButtonComponent B8
      bold = True
      color = black
      fillColor = $(-1.0000, -1.0000, 1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 8
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    ButtonComponent V1
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent V2
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent V3
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent V4
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent V5
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 5
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    ButtonComponent V6
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 6
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    ButtonComponent V7
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 7
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    ButtonComponent V8
      bold = True
      color = black
      fillColor = $(-1.0000, 0.0039, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, -.225)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 8
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    ButtonComponent J1
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent J2
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent J3
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent J4
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent J5
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.075, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 5
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    ButtonComponent J6
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.225, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 6
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    ButtonComponent J7
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.375, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 7
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    ButtonComponent J8
      bold = True
      color = black
      fillColor = $(1.0000, 1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.525, .075)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 8
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  Routine escu
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Flow
  Routine trial
  Routine escu
  Routine trial
  Routine trial
